# Generated by Configurator on Fri Apr 02 14:20:00 PDT 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,COM4,SerialManager,COM4
Device,Arduino-Hub,Arduino,Arduino-Hub
Device,Arduino-Switch,Arduino,Arduino-Switch
Device,Arduino-Shutter,Arduino,Arduino-Shutter
Device,Arduino-Input,Arduino,Arduino-Input
Device,Blackfly BFLY-U3-23S6M_17290014,PointGrey,Blackfly BFLY-U3-23S6M_17290014
Device,GenericSLM,GenericSLM,GenericSLM
Device,Thorlabs Filter Wheel,ThorlabsFilterWheel,Thorlabs Filter Wheel

# Pre-init settings for devices
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,57600
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,0
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,115200
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Enable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,0
Property,Arduino-Hub,Logic,Normal
Property,Arduino-Hub,Port,COM3
Property,Arduino-Input,Pin,All
Property,Arduino-Input,Pull-Up-Resistor,On
Property,Blackfly BFLY-U3-23S6M_17290014,Use Advanced Mode?,Yes
Property,GenericSLM,GraphicsPort,\\.\DISPLAY2
Property,GenericSLM,TestModeHeight,1080
Property,GenericSLM,TestModeWidth,1920
Property,Thorlabs Filter Wheel,Port,COM4

# Pre-init settings for COM ports

# Hub (parent) references
Parent,Arduino-Switch,Arduino-Hub
Parent,Arduino-Shutter,Arduino-Hub
Parent,Arduino-Input,Arduino-Hub

# Initialize
Property,Core,Initialize,1

# Delays
Delay,Thorlabs Filter Wheel,800.0

# Focus directions

# Roles
Property,Core,Camera,Blackfly BFLY-U3-23S6M_17290014
Property,Core,Shutter,Arduino-Shutter
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Arduino-Switch
Label,Arduino-Switch,63,ALL ON
Label,Arduino-Switch,62,62
Label,Arduino-Switch,61,61
Label,Arduino-Switch,60,60
Label,Arduino-Switch,59,59
Label,Arduino-Switch,58,58
Label,Arduino-Switch,57,57
Label,Arduino-Switch,56,56
Label,Arduino-Switch,55,55
Label,Arduino-Switch,54,54
Label,Arduino-Switch,53,53
Label,Arduino-Switch,52,52
Label,Arduino-Switch,51,51
Label,Arduino-Switch,50,50
Label,Arduino-Switch,49,49
Label,Arduino-Switch,48,48
Label,Arduino-Switch,47,47
Label,Arduino-Switch,46,46
Label,Arduino-Switch,45,45
Label,Arduino-Switch,44,44
Label,Arduino-Switch,43,43
Label,Arduino-Switch,42,42
Label,Arduino-Switch,41,41
Label,Arduino-Switch,40,40
Label,Arduino-Switch,39,39
Label,Arduino-Switch,38,38
Label,Arduino-Switch,37,37
Label,Arduino-Switch,36,36
Label,Arduino-Switch,35,35
Label,Arduino-Switch,34,34
Label,Arduino-Switch,33,33
Label,Arduino-Switch,32,32
Label,Arduino-Switch,31,31
Label,Arduino-Switch,30,30
Label,Arduino-Switch,29,29
Label,Arduino-Switch,28,28
Label,Arduino-Switch,27,27
Label,Arduino-Switch,26,26
Label,Arduino-Switch,25,25
Label,Arduino-Switch,24,24
Label,Arduino-Switch,23,23
Label,Arduino-Switch,22,22
Label,Arduino-Switch,21,21
Label,Arduino-Switch,20,20
Label,Arduino-Switch,19,19
Label,Arduino-Switch,18,18
Label,Arduino-Switch,17,17
Label,Arduino-Switch,16,16
Label,Arduino-Switch,15,15
Label,Arduino-Switch,14,14
Label,Arduino-Switch,13,13
Label,Arduino-Switch,12,12
Label,Arduino-Switch,11,11
Label,Arduino-Switch,10,10
Label,Arduino-Switch,9,9
Label,Arduino-Switch,8,8
Label,Arduino-Switch,7,7
Label,Arduino-Switch,6,6
Label,Arduino-Switch,5,5
Label,Arduino-Switch,4,False Trigger
Label,Arduino-Switch,3,3
Label,Arduino-Switch,2,DLP Shutter
Label,Arduino-Switch,1,642nm  laser
Label,Arduino-Switch,0,ALL OFF
# Thorlabs Filter Wheel
Label,Thorlabs Filter Wheel,5,Block
Label,Thorlabs Filter Wheel,4,Empty
Label,Thorlabs Filter Wheel,3,Empty
Label,Thorlabs Filter Wheel,2,Blue
Label,Thorlabs Filter Wheel,1,Red
Label,Thorlabs Filter Wheel,0,Yellow

# Configuration presets
# Group: Channel
# Preset: YFP_532nm
ConfigGroup,Channel,YFP_532nm,Arduino-Switch,Blanking Mode,Off
ConfigGroup,Channel,YFP_532nm,Arduino-Switch,Label,8
ConfigGroup,Channel,YFP_532nm,Thorlabs Filter Wheel,Label,Yellow
ConfigGroup,Channel,YFP_532nm,Thorlabs Filter Wheel,State,0
ConfigGroup,Channel,YFP_532nm,Arduino-Switch,Blank On,Low
ConfigGroup,Channel,YFP_532nm,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,YFP_532nm,Blackfly BFLY-U3-23S6M_17290014,Format-7 Mode,Mode-7
ConfigGroup,Channel,YFP_532nm,Blackfly BFLY-U3-23S6M_17290014,Gain(dB),0.0000

# Preset: Laser
ConfigGroup,Channel,Laser,Arduino-Switch,Blanking Mode,Off
ConfigGroup,Channel,Laser,Arduino-Switch,Label,642nm  laser
ConfigGroup,Channel,Laser,Thorlabs Filter Wheel,Label,Red
ConfigGroup,Channel,Laser,Thorlabs Filter Wheel,State,1
ConfigGroup,Channel,Laser,Arduino-Switch,Blank On,Low
ConfigGroup,Channel,Laser,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,Laser,Blackfly BFLY-U3-23S6M_17290014,Format-7 Mode,Mode-0
ConfigGroup,Channel,Laser,Blackfly BFLY-U3-23S6M_17290014,Gain(dB),29.9964

# Preset: DLP_Blue
ConfigGroup,Channel,DLP_Blue,Arduino-Switch,Blanking Mode,Off
ConfigGroup,Channel,DLP_Blue,Arduino-Switch,Label,DLP Shutter
ConfigGroup,Channel,DLP_Blue,Thorlabs Filter Wheel,Label,Blue
ConfigGroup,Channel,DLP_Blue,Thorlabs Filter Wheel,State,2
ConfigGroup,Channel,DLP_Blue,Arduino-Switch,Blank On,Low
ConfigGroup,Channel,DLP_Blue,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,DLP_Blue,Blackfly BFLY-U3-23S6M_17290014,Format-7 Mode,Mode-7
ConfigGroup,Channel,DLP_Blue,Blackfly BFLY-U3-23S6M_17290014,Gain(dB),0.0000

# Preset: All_Off
ConfigGroup,Channel,All_Off,Arduino-Switch,Blanking Mode,Off
ConfigGroup,Channel,All_Off,Arduino-Switch,Label,ALL OFF
ConfigGroup,Channel,All_Off,Thorlabs Filter Wheel,Label,Block
ConfigGroup,Channel,All_Off,Thorlabs Filter Wheel,State,5
ConfigGroup,Channel,All_Off,Arduino-Switch,Blank On,Low
ConfigGroup,Channel,All_Off,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,All_Off,Blackfly BFLY-U3-23S6M_17290014,Format-7 Mode,Mode-0
ConfigGroup,Channel,All_Off,Blackfly BFLY-U3-23S6M_17290014,Gain(dB),29.9964

# Preset: DLP_Yellow
ConfigGroup,Channel,DLP_Yellow,Arduino-Switch,Blanking Mode,Off
ConfigGroup,Channel,DLP_Yellow,Arduino-Switch,Label,DLP Shutter
ConfigGroup,Channel,DLP_Yellow,Thorlabs Filter Wheel,Label,Yellow
ConfigGroup,Channel,DLP_Yellow,Thorlabs Filter Wheel,State,0
ConfigGroup,Channel,DLP_Yellow,Arduino-Switch,Blank On,Low
ConfigGroup,Channel,DLP_Yellow,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,DLP_Yellow,Blackfly BFLY-U3-23S6M_17290014,Format-7 Mode,Mode-0
ConfigGroup,Channel,DLP_Yellow,Blackfly BFLY-U3-23S6M_17290014,Gain(dB),29.9964

# Preset: DLP_Red
ConfigGroup,Channel,DLP_Red,Arduino-Switch,Blanking Mode,Off
ConfigGroup,Channel,DLP_Red,Arduino-Switch,Label,DLP Shutter
ConfigGroup,Channel,DLP_Red,Thorlabs Filter Wheel,Label,Red
ConfigGroup,Channel,DLP_Red,Thorlabs Filter Wheel,State,1
ConfigGroup,Channel,DLP_Red,Arduino-Switch,Blank On,Low
ConfigGroup,Channel,DLP_Red,Arduino-Shutter,OnOff,0
ConfigGroup,Channel,DLP_Red,Blackfly BFLY-U3-23S6M_17290014,Format-7 Mode,Mode-0
ConfigGroup,Channel,DLP_Red,Blackfly BFLY-U3-23S6M_17290014,Gain(dB),29.9964



# PixelSize settings

